PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[1,1,1]
  expName = LobuleIX_practice
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcomeAndInstructions
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will listen to short narratives consisting of three sentences. Please pay close attention to each narrative.

        Some narratives will describe events that naturally go together, while others may not. Your task is simply to listen attentively throughout the experiment.
        Occasionally, you may be asked a question to ensure that you are paying attention.
        Please remain still and focused during the entire session.

        Press Spacebar to continue.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        base = "audios/"

        stimuli = []

        # -----------------------
        # COHERENT TRIALS
        # -----------------------
        for i in range(1, 21):
            name = f"coh_{i}"

            stimuli.append({
                "file": base + name + ".mp3",
                "cond": "coh",
                "question": name in ["coh_1", "coh_5", "coh_12", "coh_17"]
            })

        # -----------------------
        # INCOHERENT TRIALS
        # -----------------------
        for i in range(1, 21):
            name = f"incoh_{i}"

            stimuli.append({
                "file": base + name + ".mp3",
                "cond": "incoh",
                "question": name in ["incoh_3", "incoh_9", "incoh_15", "incoh_20"]
            })

        # -----------------------
        # RULE: no 3 same in a row
        # -----------------------
        def valid_sequence(seq):
            for i in range(len(seq) - 2):
                if seq[i]["cond"] == seq[i+1]["cond"] == seq[i+2]["cond"]:
                    return False
            return True

        # -----------------------
        # SHUFFLE UNTIL VALID
        # -----------------------
        while True:
            random.shuffle(stimuli)
            if valid_sequence(stimuli):
                break

        # FINAL trial list
        trial_list = stimuli
    KeyboardComponent Welcome_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent Goodbye_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press SPACEBAR to end the experiment.
    KeyboardComponent goodbye_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank10
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    TextComponent text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = +
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  Routine coh_3
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    SoundComponent coherent_3
      forceEndRoutine = False
      sound [set every repeat] = audios/coh3.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine coh_5
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    SoundComponent coherent_5
      forceEndRoutine = False
      sound [set every repeat] = audios/coh5.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine coh_6
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    SoundComponent coherent_6
      forceEndRoutine = False
      sound [set every repeat] = audios/coh6.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine coh_2
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  Routine incoh_1
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    SoundComponent incoherent_1
      forceEndRoutine = False
      sound [set every repeat] = audios/incoh1.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine incoh_2
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    SoundComponent incoherent_2
      forceEndRoutine = False
      sound [set every repeat] = audios/incoh2.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine coh_4
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  Routine incoh_3
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    SoundComponent incoherent_3
      forceEndRoutine = False
      sound [set every repeat] = audios/incoh3.mp3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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  Routine incoh_4
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  Routine incoh_5
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  Routine incoh_6
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  Routine incoh_7
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  Routine coh_7
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  Routine incoh_8
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  Routine incoh_9
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  Routine coh_8
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  Routine coh_9
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  Routine incoh_10
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  Routine coh_10
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  Routine incoh_11
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  Routine coh_11
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  Routine coh_12
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  Routine incoh_12
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  Routine coh_13
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  Routine incoh_13
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  Routine incoh_14
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  Routine coh_14
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  Routine incoh_15
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  Routine coh_15
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  Routine incoh_16
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  Routine coh_16
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  Routine coh_17
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  Routine incoh_17
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  Routine incoh_18
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  Routine coh_18
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  Routine incoh_19
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  Routine coh_19
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  Routine coh_20
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  Routine incoh_20
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  Routine blank2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine question_coh5
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    TextComponent question_coh_5
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_coh5
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_incoh3
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    TextComponent question_incoh_3
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_incoh3
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_incoh9
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    TextComponent question_incoh_9
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_incoh9
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_coh12
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    TextComponent question_coh_12
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_coh12
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_coh17
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    TextComponent question_coh_17
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_coh17
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_incoh15
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    TextComponent question_incoh_15
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_incoh15
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine question_incoh20
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    TextComponent question_incoh_20
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_icoh20
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial_coh
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    SoundComponent trial_coherent
      forceEndRoutine = False
      sound [set every repeat] = trial_audios/coh_trial.mp3
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 8.0
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    TextComponent PracticeTrial_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = Practice trial
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  Routine trial_question_coh
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    TextComponent trialquestion_coh
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_trial_coh
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial_incoh
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    SoundComponent trial_incoherent
      forceEndRoutine = False
      sound [set every repeat] = trial_audios/incoh_trial.mp3
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    TextComponent PracticeTrial_text2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = Practice trial
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  Routine trial_question_incoh
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    TextComponent trialquestion_incoh
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_trial_incoh
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine indicator_start
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    TextComponent start_indicator
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice run over.

        Press SPACEBAR to start the real experiment.
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine coh_1
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  Routine question_coh1
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    TextComponent question_coh_1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_coh1
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine audio
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    SoundComponent audio_trial
      forceEndRoutine = False
      sound [set every repeat] = $file
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        trial = trial_list[thisN]
        file = trial["file"]
        question = trial["question"]
        cond = trial["cond"]
  Routine question
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    TextComponent question_trial
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the story about a woman?

        Press the left arrow key for no, or the right arrow key for yes.
    KeyboardComponent resp_trial
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if not question:
            continueRoutine = False
Flow
  Routine WelcomeScreen
  Routine blank10
  Routine trial_coh
  Routine trial_question_coh
  Routine blank2
  Routine trial_incoh
  Routine trial_question_incoh
  Routine indicator_start
  LoopInitiator trial_list loopType="TrialHandler"
    loopType = sequential
    nReps = len(trial_list)
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    Routine audio
    Routine question
  LoopTerminator trial_list
  Routine GoodbyeScreen
