PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Bernhard
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine settings
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        ##  enable audio recording  ##
        #from psychopy import microphone
        #microphone.switchOn()
        #idea_mic = microphone.AdvAudioCapture(stereo=False, chnl=0)

        #print("filename"); print(filename)
        #wavDirName = filename + '_wav'
        #if not os.path.isdir(wavDirName):
        #    os.makedirs(wavDirName)  # to hold .wav files
        #print("wavDirName"); print(wavDirName)


        ##  Options for DEBUG/RESARCH-mode  ##
        DEBUG = 0   #0=research-mode; 1=debug-mode
        if DEBUG:
            #loopDur     = 10 #total time for ideas
            #p_loopDur   = 10 #total time for practice-ideas
            p_audioDur  = 5 #duration for p-audio
            itemDur     = 5
            fixDur      = 1
            #recDur      = 3 #orig 10s sound/answer recording
        else:
            #loopDur     = 180 #total time for ideas
            #p_loopDur   = 60 #total time for ideas
            p_audioDur  = 34 #duration for p-audio
            itemDur     = 115
            fixDur      = 30
            #recDur      = 10 #orig 10s sound/answer recording
  Routine ins
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    ImageComponent ins_img
      image [set every repeat] = $slide
      size = (1.33, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
      units = height
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    KeyboardComponent ins_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
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    TextComponent ins_hint
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
      text [set every repeat] = $ins_hint_txt
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  Routine t_items
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    TextComponent t_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ImageComponent t_img
      image [set every repeat] = stim/Items/Party_Pic.jpg
      size = (0.5, 0.5)
      startVal [condition] = t_fix.status==FINISHED
      stopVal [condition] = t_audio.status==FINISHED
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    SoundComponent t_audio
      forceEndRoutine = False
      sound [set every repeat] = stim/Items/anonymity_1_high.mp3
      startVal [time (s)] = 30
      stopVal [duration (s)] = 25.3
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  Routine t_idea
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    TextComponent t_FZ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = ?
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    TextComponent text
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 11
      text = ?
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    MicrophoneComponent idea_mic
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 15
      stopVal [duration (s)] = 11
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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Flow
  Routine settings
  LoopInitiator ins_loop loopType="TrialHandler"
    conditionsFile = stim/MCT_ins.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 'stim\\Instr\\Instr1.jpg'), ('ins_dur', np.int64(999)), ('ins_hint_txt', 'Weiter mit Leertaste')]),
      OrderedDict([('slide', 'stim\\Instr\\Instr2.jpg'), ('ins_dur', np.int64(999)), ('ins_hint_txt', 'Weiter mit Leertaste')]),
      OrderedDict([('slide', 'stim\\Instr\\Instr3.jpg'), ('ins_dur', np.int64(999)), ('ins_hint_txt', 'Weiter mit Leertaste')])]
    Routine ins
  LoopTerminator ins_loop
  Routine t_items
  LoopInitiator item_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine t_idea
  LoopTerminator item_loop
