PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'session': '01', 'run': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mct
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine settings
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        ##  enable audio recording  ##
        #from psychopy import microphone
        #microphone.switchOn()
        #idea_mic = microphone.AdvAudioCapture(stereo=False, chnl=0)

        #print("filename"); print(filename)
        #wavDirName = filename + '_wav'
        #if not os.path.isdir(wavDirName):
        #    os.makedirs(wavDirName)  # to hold .wav files
        #print("wavDirName"); print(wavDirName)


        ##  Options for DEBUG/RESARCH-mode  ##
        DEBUG = 0   #0=research-mode; 1=debug-mode
        if DEBUG:
            #loopDur     = 10 #total time for ideas
            #p_loopDur   = 10 #total time for practice-ideas
            p_audioDur  = 5 #duration for p-audio
            itemDur     = 5
            fixDur      = 1
            #recDur      = 3 #orig 10s sound/answer recording
        else:
            #loopDur     = 180 #total time for ideas
            #p_loopDur   = 60 #total time for ideas
            p_audioDur  = 34 #duration for p-audio
            itemDur     = 115
            fixDur      = 30
            #recDur      = 10 #orig 10s sound/answer recording
  Routine ins
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    ImageComponent ins_img
      image [set every repeat] = $slide
      size = (1.33, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
      units = height
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    KeyboardComponent ins_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
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    TextComponent ins_hint
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ins_dur
      text [set every repeat] = $ins_hint_txt
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  Routine t_items
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    TextComponent t_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ImageComponent t_img
      image [set every repeat] = $item
      size = (0.5, 0.5)
      startVal [condition] = t_fix.status==FINISHED
      stopVal [condition] = t_audio.status==FINISHED
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    SoundComponent t_audio
      forceEndRoutine = False
      sound [set every repeat] = $audiofile
      startVal [time (s)] = $fixDur
      stopVal [duration (s)] = $audio_dur
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    BidsEventComponent bidsEvent_audio plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = audio
      link_component = t_audio
      linked_attributes = ['Onset', 'Duration']
      onset = t_audio.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = $condition
  Routine t_idea
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    TextComponent t_FZ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = ?
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    TextComponent text
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 11
      text = ?
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    MicrophoneComponent idea_mic
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 15
      stopVal [duration (s)] = 11
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    BidsEventComponent bidsEvent_tFZ plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = thinking
      link_component = t_FZ
      linked_attributes = ['Onset', 'Duration']
      onset = t_FZ.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = $condition
    BidsEventComponent bidsEvent_idea_mic plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = speaking
      link_component = idea_mic
      linked_attributes = ['Onset', 'Duration']
      onset = idea_mic.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = $condition
  Routine wait_for_mri
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    TextComponent wait_text
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Bitte warten.

        Das Experiment startet in Kürze!
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  UnknownRoutine bidsOnset
  BidsExportRoutine bidsExport
    add_code = True
    add_environment = False
    add_stimuli = True
    data_type = func
    dataset_name = bids
    generate_hed_metadata = False
    runs = True
Flow
  Routine settings
  Routine wait_for_mri
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"stim/sub-{int(expInfo['participant']):03d}/ses-{int(expInfo['session']):02d}/sub-{int(expInfo['participant']):03d}_ses-{int(expInfo['session']):02d}_MCT_run-{int(expInfo['run']):02d}_conditions.csv"
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('marker', np.int64(41)), ('item', 'stim\\Items\\Job_Pic.JPG'), ('audiofile', 'stim\\Items\\gain_1_high.mp3'), ('audio_dur', np.float64(33.3))]),
      OrderedDict([('marker', np.int64(42)), ('item', 'stim\\Items\\Lotto_Pic.JPG'), ('audiofile', 'stim\\Items\\gain_2_low.mp3'), ('audio_dur', np.float64(31.3))]),
      OrderedDict([('marker', np.int64(43)), ('item', 'stim\\Items\\Seminar_Pic.JPG'), ('audiofile', 'stim\\Items\\gain_3_low.mp3'), ('audio_dur', np.float64(28.3))]),
      OrderedDict([('marker', np.int64(44)), ('item', 'stim\\Items\\Social_Media_Pic.JPG'), ('audiofile', 'stim\\Items\\gain_4_high.mp3'), ('audio_dur', np.float64(34.3))])]
    Routine t_items
    LoopInitiator item_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine t_idea
    LoopTerminator item_loop
  LoopTerminator trials
  BidsExportRoutine bidsExport
