PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'session': '01', 'run': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = midance
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Introduction
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    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Im Folgenden Experiment werden Sie zwei Videos sehen. Anschließend bekommen Sie verschiedene Aufgaben zur mentalen Vorstellung.

        Für diese Aufgabe gibt es keine festen Vorgaben und kein richtig oder falsch. Bitte bearbeiten Sie jede Aufgabe so, wie es für Sie am natürlichsten ist.

        Zwischen den einzelnen Aufgaben wird ein Fixaktionskreuz eingeblendet. Bitte richten Sie in diesen Phasen Ihre Aufmerksamkeit auf das Kreuz, bis die nächste Aufgabe beginnt.
  Routine blank
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    TextComponent blank_1_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine imagery
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    TextComponent imagery_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = i
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    BidsEventComponent bidsEvent_imagery plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = imagery_screen
      linked_attributes = ['Onset', 'Duration']
      onset = imagery_screen.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = $Instruction
  Routine video_ballet
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = videos/Ballet_Video.mp4
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    BidsEventComponent bidsEvent_movie plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = movie
      linked_attributes = ['Duration']
      onset = movie.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = video_b
  Routine video_contemporary
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = videos/Contemporary_Video.mp4
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    BidsEventComponent bidsEvent_movie_2 plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = movie_2
      linked_attributes = ['Duration']
      onset = movie_2.tStartRefresh-key_resp.tStartRefresh-key_resp.rt
      overwrite_linked = True
      trial_type = video_c
  Routine blank_2
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    TextComponent blank_2_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blank_3
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    TextComponent blank_3_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine blank_4
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    TextComponent text_4_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine start
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    TextComponent Start_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Das Experiment wird nun starten.
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    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_cross
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine end
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    TextComponent end_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Ende des Durchgangs
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  Routine instruction
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Instruction
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  BidsExportRoutine bidsExport
    add_code = True
    add_environment = False
    add_stimuli = True
    data_type = func
    dataset_name = bids
    generate_hed_metadata = True
    runs = True
Flow
  Routine start
  Routine blank
  Routine video_ballet
  Routine blank_2
  Routine video_contemporary
  Routine blank_3
  LoopInitiator trial_imagery loopType="TrialHandler"
    conditionsFile = $f"conditions/sub-{int(expInfo['participant']):03d}/ses-{int(expInfo['session']):02d}/sub-{int(expInfo['participant']):03d}_ses-{int(expInfo['session']):02d}_imagery_run-{int(expInfo['run']):02d}_conditions.csv"
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 2), ('Instruction', 'C')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')]),
      OrderedDict([('Condition', 1), ('Instruction', 'B')])]
    Routine fixation_cross
    Routine instruction
    Routine imagery
  LoopTerminator trial_imagery
  Routine end
  BidsExportRoutine bidsExport
